begintemplate detailedpyrtypeA

public init, connect_sections, size_sections, append_sections, define_synapses
public mechinit, insert_mechs, set_biophys, get_root
public  pre_list, connect_pre, is_art, is_connected, gid, randi
public soma, dend, axon
public all, soma_list, axon_list, dendrite_list
public x, y, z, position, myroot, myrootsec, Vrest
public NumSoma, NumDend, NumAxon

// strings
strdef myroot, myname

// objects
objref syn, pre_list, templist, rootlist, myrootsec, this

// external variables
external numCellTypes, cellType

// create the sections
create soma[1], dend[76], axon[11]

proc init() {
	gid = $1
	randi = $2
	
	// morphology
	connect_sections()	// local fcn: connect soma, dendrites, axon initial segment
	size_sections()		// local fcn: set the size dimensions of each section
	define_shape()		// builtin fcn: fill in 3d info for sections defined by only L and diam, translate 3d points for consistency with their connections 
  	append_sections()	// local fcn: append all sections to the section list
	set_nseg()			// local fcn: set the number of segments in each section
	get_root()			// local fcn: perform morphology checks

	// electrophysiology
	mechinit()			// local fcn: set values for max conductances and reversal potentials of ion channels and other ephys parameters that are subject to fitting
	insert_mechs()		// local fcn: insert ion channels and actually set values determined in the mechinit fcn
	set_chanparams()	// local fcn: after all channels have been inserted, then their other parameters can be set	

	// synapses
	pre_list = new List() // define a list for the presynaptic connections	
	define_synapses($3)	// local fcn: define all possible synaptic connections received by this cell
}

proc connect_sections() { local i
	connect dend(0), soma[0](0.5)
	for i = 1, 2 connect dend[i](0), dend[i-1](1)
	connect dend[3](0), dend[1](1)
	connect dend[4](0), dend(1)
	for i = 5, 6 connect dend[i](0), dend[i-1](1)
	connect dend[7](0), dend[5](1)
	for i = 8, 9 connect dend[i](0), dend[7](1)
	for i = 10, 11 connect dend[i](0), dend[9](1)
	connect dend[12](0), dend[4](1)
	for i = 13, 14 connect dend[i](0), dend[i-1](1)
	connect dend[15](0), dend[13](1)
	connect dend[16](0), dend[12](1)
	connect dend[17](0), soma[0](0.5)
	for i = 18, 20 connect dend[i](0), dend[i-1](1)
	connect dend[21](0), dend[19](1)
	connect dend[22](0), dend[18](1)
	connect dend[23](0), dend[17](1)
	for i = 24, 25 connect dend[i](0), dend[23](1)
	for i = 26, 27 connect dend[i](0), dend[25](1)
	for i = 28, 29 connect dend[i](0), dend[27](1)
	connect dend[30](0), soma[0](0.5)
	for i = 31, 32 connect dend[i](0), dend[30](1)
	for i = 33, 34 connect dend[i](0), dend[i-1](1)
	connect dend[35](0), dend[33](1)
	connect dend[36](0), dend[32](1)
	for i = 37, 38 connect dend[i](0), dend[36](1)
	for i = 39, 40 connect dend[i](0), dend[38](1)
	for i = 41, 42 connect dend[i](0), dend[40](1)
	connect dend[43](0), soma[0](0.5)
	for i = 44, 46 connect dend[i](0), dend[i-1](1)
	connect dend[47](0), dend[45](1)
	connect dend[48](0), dend[44](1)
	connect dend[49](0), dend[43](1)
	for i = 50, 51 connect dend[i](0), dend[49](1)
	connect dend[52](0), soma[0](0.5)
	for i = 53, 55 connect dend[i](0), dend[i-1](1)
	connect dend[56](0), dend[54](1)
	for i = 57, 58 connect dend[i](0), dend[56](1)
	connect dend[59](0), dend[53](1)
	connect dend[60](0), dend[52](1)
	for i = 61, 62 connect dend[i](0), dend[60](1)
	for i = 63, 64 connect dend[i](0), dend[62](1)
	connect dend[65](0), soma[0](0.5)
	for i = 66, 67 connect dend[i](0), dend[i-1](1)
	connect dend[68](0), dend[66](1)
	for i = 69, 70 connect dend[i](0), dend[68](1)
	for i = 71, 72 connect dend[i](0), dend[70](1)
	connect dend[73](0), dend[65](1)
	for i = 74, 75 connect dend[i](0), dend[73](1)
	connect axon(0), soma[0](0.5)
	for i = 1, 10 connect axon[i](0), axon[i-1](1)
}


proc size_sections() {
  soma[0] {pt3dclear()
	pt3dadd(-7.40274, 0, 0, 14.8055)
	pt3dadd(0, 0, 0, 14.8055)
	pt3dadd(7.40274, 0, 0, 14.8055)
  }
  dend {pt3dclear()
	pt3dstyle(1, 0, 0, 0)
	pt3dadd(2.86, 8.1, 1.39, 1.72)
	pt3dadd(2.87, 9.7, 1.37, 1.72)
	pt3dadd(3.19, 12.91, 1.32, 1.51)
	pt3dadd(3.86, 15.82, 2.07, 1.51)
	pt3dadd(5.25, 19.38, 1.98, 1.51)
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  }
  dend[18] {  }
  dend[19] {pt3dclear()
	pt3dadd(-28.66, 12.89, -0.13, 0.97)
	pt3dadd(-33.52, 15.72, -1.63, 0.97)
	pt3dadd(-38.65, 18.51, -3.91, 0.97)
	pt3dadd(-46.15, 23.81, -6.15, 0.86)
	pt3dadd(-50.75, 29.26, -9.3, 0.86)
	pt3dadd(-54.31, 35.48, -9.28, 0.86)
	pt3dadd(-60.82, 40.17, -11.55, 0.86)
  }
  dend[20] {pt3dclear()
	pt3dadd(-60.82, 40.17, -11.55, 0.86)
	pt3dadd(-66.85, 41.19, -12.18, 0.86)
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  }
  for i=0,9{
	axon[i] {pt3dclear()
		pt3dadd(-5*i-7.40274, 0, 0, 0.5) 
		pt3dadd(-2.5*(i+1)-7.40274, 0, 0, 0.5) 
		pt3dadd(-5*(i+1)-7.40274, 0, 0, 0.5)
	}
  }
  axon[10]{pt3dclear()
	pt3dadd(-57.40274, 0, 0, 0.5) 
	pt3dadd(-107.40274, 0, 0, 0.5) 
	pt3dadd(-157.40274, 0, 0, 0.5)
  }
}


objref all, dendrite_list, soma_list, axon_list
proc append_sections() { local i
	objref all, dendrite_list, soma_list, axon_list

	all = new SectionList()
	soma_list = new SectionList()
	axon_list = new SectionList()
	dendrite_list = new SectionList()

	soma[0] all.append()
	soma[0] soma_list.append()
	
	for i=0,75{
		dend[i] all.append()
		dend[i] dendrite_list.append()
	}
	
	for i=0,10{
		axon[i] all.append()
	}
	
	axon[9] axon_list.append() //Only append AIS segment to receive synapses
}


external lambda_f
proc set_nseg() {
  	forsec all { nseg = int((L/(0.1*lambda_f(100))+.9)/2)*2 + 1  }
}
proc mechinit() {

	// resting membrane potential. Must lie between Na+ and K+ reversal potentials
	Vrest=-80
	
	// Temperature of simulation
	celsius = 34.0

	// Membrane resistance in ohm*cm2
	RmDend = 40000 //1/0.00018
	RmSoma = 21000 //1/0.00018
	RmAx = 1000
	
	// Membrane capacitance in uF/cm2
	CmSoma= 1.5
	CmDend = 1.5

	// Axial resistance in ohm*cm
	RaDend= 150
	RaSoma= 150	
	RaAx = 150
	
	// Calcium concentrations in mM
	ca_outside = 2
	ca_inside = 5.e-6 // 50.e-6
	catau = 10

	// reversal potentials in mV
	ekval = -90
	enaval = 45
	eHCNval = -30
	ecaval = 8.314*(273.15+celsius)/(2*9.649e4)*log(ca_outside/ca_inside)*1000 // about 170, otherwise set to 130
	
	if (Vrest<ekval) Vrest=ekval // Cell cannot rest lower than K+ reversal potential
	if (Vrest>enaval) Vrest=enaval // Cell cannot rest higher than Na+ reversal potential
	eleakval = Vrest

	// max ion channel conductances in mho/cm2
	gna = 0.015
	gnap = 0//0.000559 // 0.000551 
	gkdr = 0.002//0.002 
	ghd = 1.5e-5//1.5e-5
	gca = 5.5e-4 
	gm = 0.00224 // 0.00222  
	gsAHP = 0.05//0.0019
	gkap = 0.002 
			
	nash=10

	// axon channels
	gna12_ais_max = 3000   // Nav1.2 
	gna16_ais_max = 3200   // Nav1.6
	gkv_axon = 1000
	nash=10
	
	tha_na16 = -43
	tha_na12 = -30
	
}

proc insert_mechs() {
 

	soma[0]{
		Ra = RaSoma
		cm=CmSoma
		insert cadyn gcabar_cadyn = gca  eca = 120
		insert leak el_leak= -72  glbar_leak = 1/RmSoma 
		insert hd ghdbar_hd = ghd 
		insert na3 sh_na3=nash ar_na3=1	gbar_na3 = 3*gna
		insert nap gbar_nap = gnap
		insert kdr gbar_kdr = gkdr
		insert capool taucas = 1000  fcas_capool = 0.05 //only in dend and p_dend
		insert sAHP gsAHPbar_sAHP = gsAHP
		insert im gbar_im = gm
		insert kap gkabar_kap = gkap
	} 

	for i=0,75{
		dend[i] {
			Ra = RaDend
			cm = CmDend
			insert cadyn gcabar_cadyn = gca eca = 120
			insert leak el_leak = -72  glbar_leak = 1/RmDend
			insert hd ghdbar_hd = ghd 
			insert na3 sh_na3=nash ar_na3=1	gbar_na3 = gna
			insert nap gbar_nap = 0  gbar_nap(1/(2*nseg)) = 0.8*gnap
			insert kdr gbar_kdr = gkdr
			insert capool taucas = 1000  fcas_capool = 0.05 
			insert sAHP gsAHPbar_sAHP = 0
			insert im gbar_im = 0 gbar_im(1/(2*nseg)) = 0.8*gm
			insert kap gkabar_kap = 0
		}	
	}
	
	for i=0,9 axon[i] {
		insert pas
		Ra = RaAx//50000
		cm = 0.8 
		g_pas = 1/(RmAx+200)
		e_pas = -70
		insert na12  //gbar_na12=0
		insert na16  //gbar_na16=0
		insert kv    //gbar_kv = 0
		ena = 45
		ek = -90
	}
	axon[10]{
		insert pas
		Ra = RaAx
		cm = 0.2 //myelin 
		g_pas = 1/RmAx
		e_pas = -70
		insert na12  
		insert na16  
		insert kv    
		ena = 45
		ek = -90
	}
	
	axon[0]. gbar_na12= gna12_ais_max      *	0.96	*	1             								
	axon[1]. gbar_na12= gna12_ais_max  		*	0.9	*	1                      
	axon[2]. gbar_na12= gna12_ais_max  		*	0.75	*	1                    
	axon[3]. gbar_na12= gna12_ais_max  		*	0.55	*	0.95              
	axon[4]. gbar_na12= gna12_ais_max  		*	0.366985879	*	0.880142857  
	axon[5]. gbar_na12= gna12_ais_max  		*	0.2	*	0.75                 
	axon[6]. gbar_na12= gna12_ais_max  		*	0.100330761	*	0.647857143  
	axon[7]. gbar_na12= gna12_ais_max  		*	0.011532125	*	0.520285714 
	axon[8]. gbar_na12= gna12_ais_max  		*	0	*	0.428571429            
	axon[9]. gbar_na12= gna12_ais_max  		*	0	*	0.342857143 
	axon[10]. gbar_na12= gna12_ais_max  		*	0	*	0.342857143 
		
	axon[0]. gbar_na16 = gna16_ais_max	*	0.04	*	1   
	axon[1]. gbar_na16 = gna16_ais_max	*	0.1	*	1   
	axon[2]. gbar_na16 = gna16_ais_max	*	0.25	*	1   
	axon[3]. gbar_na16 = gna16_ais_max	*	0.45	*	0.95   
	axon[4]. gbar_na16 = gna16_ais_max	*	0.633014121	*	0.880142857   
	axon[5]. gbar_na16 = gna16_ais_max	*	0.8	*	0.75   
	axon[6]. gbar_na16 = gna16_ais_max	*	0.899669239	*	0.647857143   
	axon[7]. gbar_na16 = gna16_ais_max	*	0.988467875	*	0.520285714   
	axon[8]. gbar_na16 = gna16_ais_max	*	1	*	0.428571429   
	axon[9]. gbar_na16 = gna16_ais_max	*	1	*	0.342857143  
	axon[10]. gbar_na16 = gna16_ais_max	*	1	*	0.342857143  
				
	axon[0]. gbar_kv = gkv_axon	*	0.2 
	axon[1]. gbar_kv = gkv_axon	*	0.3 
	axon[2]. gbar_kv = gkv_axon	*	0.4 
	axon[3]. gbar_kv = gkv_axon	*	0.5 
	axon[4]. gbar_kv = gkv_axon	*	0.6 
	axon[5]. gbar_kv = gkv_axon	*	0.7 
	axon[6]. gbar_kv = gkv_axon	*	0.8 
	axon[7]. gbar_kv = gkv_axon	*	0.9
	axon[8]. gbar_kv = gkv_axon	*	1
	axon[9]. gbar_kv = gkv_axon	*	1
	axon[10]. gbar_kv = gkv_axon	*	1
	
}

proc set_chanparams() {
	forsec all {
		
	}
}


proc connect_pre() {  // $o1 target point process, $o2 returned NetCon
	axon[10] $o2 = new NetCon (&v(0.5), $o1)
			$o2.threshold = -10

}

func is_art()  { return 0 }

proc position(){ local i
	forall {
		for i = 0, n3d()-1 {
			pt3dchange(i, $1-x+x3d(i), $2-y+y3d(i), $3-z+z3d(i), diam3d(i))
		}
	}
	x = $1  y = $2  z = $3	
}

proc get_root() {local i localobj sref
	rootlist = new SectionList()
	rootlist.allroots()
	i=0
	forsec all {
		sref = new SectionRef()
		if (sref.has_parent==0) {
			myroot = secname()
			i=i+1
		}
		for(x,0) {
			if (diam(x) <=0.01) print "WARNING: tiny diameter of ",  diam(x), " um at ", secname(), ", point ", x, "!"
			if (diam3d(x) <=0.01) print "WARNING: tiny 3d diameter of ", diam3d(x), " um at ", secname(), ", point ", x, "!"
		}
		if (L <=0.001) print "WARNING: tiny length of ", L, " um at ", secname(), "!"
	}
	if (i>1) {
		print "WARNING: cell ", gid, " has ", i, " root sections!"
	}
}
strdef myStr

objref newSecRef, syn
proc define_synapses() {
	ind = $1
	i = 0

	access soma[0]
	{distance()}

	for celltype = 0, numCellTypes-1 {
		templist = new List ()
		for r=0, cellType[ind].SynList[celltype].count()-1 {
		
			execute(cellType[ind].SynList[celltype].object(r).NewSynStr, this) // sets newSecRef
						
			forsec newSecRef {		
				for (x,0) {
					// Decides if distance is correct
					execute(cellType[ind].SynList[celltype].object(r).CondStr, this)
					
					 if (y==1) {
						// Declares new synapse
						execute(cellType[ind].SynList[celltype].object(r).SynStr, this)
						if (cellType[ind].SynList[celltype].object(r).GABAabFlag==0) {
							syn.tau1 = cellType[ind].SynList[celltype].object(r).tau1
							syn.tau2 = cellType[ind].SynList[celltype].object(r).tau2
							syn.e = cellType[ind].SynList[celltype].object(r).efirst
							if (strcmp(cellType[ind].SynList[celltype].object(r).SynType,"MyExp2Sidnw")==0) {
								syn.nw = cellType[ind].SynList[celltype].object(r).Scaling
							}
						} else {
							syn.tau1a = cellType[ind].SynList[celltype].object(r).tau1a
							syn.tau2a = cellType[ind].SynList[celltype].object(r).tau2a
							syn.ea = cellType[ind].SynList[celltype].object(r).ea
							syn.tau1b = cellType[ind].SynList[celltype].object(r).tau1b
							syn.tau2b = cellType[ind].SynList[celltype].object(r).tau2b
							syn.eb = cellType[ind].SynList[celltype].object(r).eb
						}
						syn.sid = i
						templist.append(syn)
						i = i + 1
					}
				}
			}
		}
		pre_list.append(templist)
		findme = 1
	}
}

endtemplate detailedpyrtypeA